'===============================================================================
' AS3935 LIGHTNING DETECTION UNIT
'===============================================================================
'CR1000XE program for lightning detector integration
'Pi wiring:
'  GPIO 26 (bit-bang UART TX) -> C2
'  GND                       -> G
'  GPIO 19 (IRQ pulse mirror)-> P1
'
'Serial format sent by Pi:
'  L,<distance_km>,<energy>\r\n
'
'Example:
'  L,15,84230\r\n

Public LastLightningDistanceKm As Float
Public LastLightningEnergy As Long
Public LastSerialRecord As String * 40
Public SerialBytesReturned As Float
Public PulseCountScan As Float
Public PulseCountTotal As Float
Public ParsedNumeric(3) As Float
Public LightningRecordCount As Long
Public ParseErrorCount As Long

Dim SerialParsedOK As Boolean

DataTable (LightningEvents, True, -1)
  Sample (1, LastLightningDistanceKm, FP2)
  Sample (1, LastLightningEnergy, Long)
  Sample (1, PulseCountTotal, FP2)
  Sample (1, LastSerialRecord, String)
EndTable

DataTable (LightningHealth, True, -1)
  DataInterval (0, 1, Min, 10)
  Sample (1, PulseCountScan, FP2)
  Sample (1, PulseCountTotal, FP2)
  Sample (1, LightningRecordCount, Long)
  Sample (1, ParseErrorCount, Long)
  Sample (1, LastLightningDistanceKm, FP2)
  Sample (1, LastLightningEnergy, Long)
EndTable

BeginProg
  'Set C1/C2 pair to 3.3 V logic for direct connection to Pi GPIO
  PortPairConfig(C1, 2)

  'Open ComC1 (C1 = TX, C2 = RX). Pi only transmits to logger, so C2 is used.
  'Format 16 = logic 1 high, 8N1 ASCII, suitable for LVTTL serial.
  SerialOpen(ComC1, 9600, 16, 0, 128)
  SerialFlush(ComC1)

  Scan(200, mSec, 0, 0)
    'Count mirrored IRQ pulses from Pi on P1.
    'PConfig 3 = high frequency input with pull up, POption 0 = counts.
    PulseCount(PulseCountScan, 1, P1, 3, 0, 1, 0)
    PulseCountTotal = PulseCountTotal + PulseCountScan

    'Read oldest complete record from serial buffer.
    'BeginWord = "L", EndWord = CRLF, NBytes < 0 = read between begin/end.
    'Returned payload is ",distance,energy" and is parsed numerically.
    SerialInRecord(ComC1, LastSerialRecord, 76, 0, 3338, SerialBytesReturned, 10)

    If SerialBytesReturned > 0 Then
      'LastSerialRecord holds ",distance,energy" (BeginWord 'L' is stripped)
      'So index 1 = empty, index 2 = distance, index 3 = energy
      SplitStr(ParsedNumeric, LastSerialRecord, ",", 3, 0)

      SerialParsedOK = False
      If ParsedNumeric(2) = ParsedNumeric(2) And ParsedNumeric(3) = ParsedNumeric(3) Then
        LastLightningDistanceKm = ParsedNumeric(2)
        LastLightningEnergy = ParsedNumeric(3)
        LightningRecordCount = LightningRecordCount + 1
        SerialParsedOK = True
        CallTable LightningEvents
      EndIf

      If Not SerialParsedOK Then
        ParseErrorCount = ParseErrorCount + 1
      EndIf
    EndIf

    If IfTime(0, 1, Min) Then
      CallTable LightningHealth
    EndIf
  NextScan
EndProg
